PsychoPy2experiment version="2025.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = pain_regulation
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine welcome
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    TextboxComponent welcome_text
      bold = False
      editable = False
      letterHeight = 0.07
      pos = (0, 0.05)
      size = (1.5, 0.5)
      startVal [time (s)] = 0.0
      text = Pain Regulation Task
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    TextboxComponent tb_continue
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, -0.4)
      size = (0.5, 0.25)
      startVal [time (s)] = 0.0
      text = Press the SPACEBAR to continue
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    KeyboardComponent key_resp_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        End of this section.
        Thank you.
  Routine Instruc01
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please relax and remain as still as possitble while we record your brain activity.

        Follow the on-screen instructions.

        Press the SPACEBAR to continue.
    KeyboardComponent key_resp_01
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine state_measure1
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    SliderComponent sliderGeneric
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
      letterHeight = 0.05
      size [set every repeat] = (slider_gen_width, 0.1)
      startVal [condition] = $rating_type == 'Generic'
      stopVal [condition] = $rating_type != 'Generic'
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    SliderComponent sliderSAM
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = 1, 2, 3, 4, 5, 6, 7, 8, 9
      letterHeight = 0.05
      pos [set every repeat] = (0, slider_y)
      size [set every repeat] = (slider_width, slider_height)
      startVal [condition] = $rating_type == 'SAM'
      stopVal [condition] = $rating_type != 'SAM'
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    TextComponent textStateMeasure
      letterHeight = 0.07
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_message
      wrapWidth = 1.5
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    TextComponent textLabelMin
      letterHeight = 0.05
      pos [set every repeat] = (tick_positions[0],label_y)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_min_label
      wrapWidth = 0.5
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    TextComponent textLabelMax
      letterHeight = 0.05
      pos [set every repeat] = (tick_positions[-1], label_y)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_max_label
      wrapWidth = 0.5
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    TextboxComponent tb_continue_sm
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.5, 0.25)
      startVal [condition] = $allowContinue == True
      text = Press the SPACEBAR to continue
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    KeyboardComponent key_resp_state_measure
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [condition] = $allowContinue == True
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    ImageComponent imageSAM
      image [set every repeat] = $picture_path
      pos [set every repeat] = (0, sam_y)
      size [set every repeat] = (sam_width, sam_height)
      startVal [time (s)] = 0.0
      units = height
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    CodeComponent stateMeasureHelper
      Code Type = Py
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      Begin Experiment:
        # Scale SAM properly
        # Window and coordinate setup
        screen_width, screen_height = win.size
        aspect = screen_width / screen_height  # width / height

        # In 'height' units:
        # - Full screen height = 1.0
        # - Full screen width  = aspect
        leftEdge = -aspect / 2
        rightEdge = aspect / 2
        topEdge = 0.5
        bottomEdge = -0.5


        # --- Generic Slider Scaling ---
        # Full-width slider across screen
        slider_gen_width = aspect * 0.7   # 70% of screen width

        # --- SAM image geometry (pixels) ---
        sam_px_width = 1168
        sam_px_height = 231
        sam_aspect = sam_px_width / sam_px_height  # ≈ 5.065

        # Pictogram/gap geometry (pixels)
        pictogram_px_width = 215
        gap_px_width = 23
        num_pictograms = 5
        num_gaps = num_pictograms - 1

        # Sanity check total width in px (info only)
        total_calc_px = num_pictograms * pictogram_px_width + num_gaps * gap_px_width
        # Note: total_calc_px ≈ 1175; close enough to 1170 given source image padding.

        # --- Layout decisions (height units) ---
        sam_height = 0.25                         # 25% of screen height
        sam_width  = sam_height * sam_aspect      # scaled width based on aspect
        sam_y      = 0.1                          # vertical position of the image

        # Slider layout (height units)
        slider_y      = -0.09                     # vertical position of the slider center
        slider_height = 0.06                      # slider thickness/height
        slider_px_width = sam_px_width - 215
        slider_width = sam_width * (slider_px_width / sam_px_width) # match slider width to image width

        # Label MinMax layout
        label_y = slider_y - 0.2 # slightly below the slider

        # Scale factor: px -> 'height' units within the image width
        scale_factor = sam_width / sam_px_width

        pictogram_w = pictogram_px_width * scale_factor
        gap_w       = gap_px_width * scale_factor

        # --- Compute 9 tick x-positions aligned to pictograms (1,3,5,7,9) and gaps (2,4,6,8) ---
        tick_positions = []
        # Start at the center of the first pictogram: left edge + half pictogram width
        x = -sam_width / 2 + pictogram_w / 2

        for i in range(9):
            tick_positions.append(x)
            # Advance: pictogram -> gap -> pictogram -> gap ...
            if i % 2 == 0:  # 0,2,4,6,8 (odd-numbered ticks under pictograms)
                x += pictogram_w / 2 + gap_w / 2
            else:           # 1,3,5,7 (even-numbered ticks under gaps)
                x += gap_w / 2 + pictogram_w / 2

        # Helpful mapping: tick index (0..8) -> value (1..9)
        tick_values = list(range(1, 10))
      Begin Routine:
        allowContinue = False
      Each Frame:
        # Check if either slider has been rated
        rated = (sliderGeneric.getRating() is not None) or (sliderSAM.getRating() is not None)

        # If rated, allow spacebar to end the routine
        if rated:
            allowContinue = True
        else:
            allowContinue = False
  Routine Instruct02
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will be asked to imagine the content of a written script and use the suggested mental images to modulate your body pain:

        Press the SPACEBAR to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine cross
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine state_measure_end
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    SliderComponent sliderStateMeasureEnd
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = 0,1,2,3,4,5,6,7,8,9,10
      letterHeight = 0.05
      size [set every repeat] = (slider_gen_width, 0.1)
      startVal [condition] = $rating_type == 'Generic'
      stopVal [condition] = $rating_type != 'Generic'
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    SliderComponent sliderSAMStateMeasureEnd
      font = Noto Sans
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      pos [set every repeat] = (0, slider_y)
      size [set every repeat] = (slider_width, slider_height)
      startVal [condition] = $rating_type == 'SAM'
      stopVal [condition] = $rating_type != 'SAM'
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    ImageComponent imageSAMStateMeasureEnd
      image [set every repeat] = $picture_path
      pos [set every repeat] = (0, sam_y)
      size [set every repeat] = (sam_width, sam_height)
      startVal [time (s)] = 0.0
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    TextComponent textStateMeasurePainRegEnd
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_message
      wrapWidth = 1.5
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    TextComponent textLabelMinStateMeasureEnd
      letterHeight = 0.05
      pos [set every repeat] = (tick_positions[0], label_y)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_min_label
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    TextComponent textLabelMaxStateMeasureEnd
      letterHeight = 0.05
      pos [set every repeat] = (tick_positions[-1], label_y)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_max_label
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    TextboxComponent textbox_continue_State_measure_End
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.5, 0.25)
      startVal [condition] = $allowContinue == True
      text [set every repeat] = Press the SPACEBAR to continue
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    CodeComponent codeStateMeasureEndHelper
      Code Type = Py
      Begin Experiment:
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      Begin Routine:
        allowContinue = False
      Each Frame:
        # Check if either slider has been rated
        rated = (sliderStateMeasureEnd.getRating() is not None) or (sliderSAMStateMeasureEnd.getRating() is not None)

        # If rated, allow spacebar to end the routine
        if rated:
            allowContinue = True
        else:
            allowContinue = False
    KeyboardComponent key_resp_StateMeasureEnd
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = $allowContinue == True
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  Routine training_instructions
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    TextComponent train_instr_text
      letterHeight = 0.05
      pos [set every repeat] = (0, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every repeat] = $instr_message
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  Routine train_resp
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Please rate how you felt the stimulus as Painful (P) or Not Painful (N)
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    KeyboardComponent key_train_resp
      allowedKeys = 'p','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine end_train
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    TextComponent text_5
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        This concludes the training session.

        Now we begin the trials.

        Press the SPACEBAR to continue.
    KeyboardComponent end_train_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pain_reg_instr01
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    TextComponent pain_reg_instr_text
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every repeat] = $pain_instr_message
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  Routine train_stimulus
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    PolygonComponent polygon_2
      fillColor = white
      shape = triangle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine pain_reg_stimulus
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    CodeComponent codehelper_timing
      Code Type = Py
      Begin Experiment:
        x = 0
      Begin Routine:
        import random
        if x == 0:
            set_time = 2
            x = 1
        else:
            set_time = random.uniform(1.2, 1.8)
            x = 1
    PolygonComponent polygon_3
      fillColor = white
      shape = triangle
      size [set every repeat] = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $set_time
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  Routine pain_reg_resp
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    TextComponent pain_reg_resp_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = Please rate how you felt the stimulus as Painful (P) or Not Painful (N)
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    KeyboardComponent key_resp_2
      allowedKeys = 'p','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine pain_reg_state_measure
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    SliderComponent sliderGenericPainReg
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = 0,1,2,3,4,5,6,7,8,9,10
      letterHeight = 0.05
      size [set every repeat] = (slider_gen_width, 0.1)
      startVal [condition] = $rating_type == 'Generic'
      stopVal [condition] = $rating_type != 'Generic'
      styles = rating
      ticks = ( 0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    SliderComponent sliderSAMPainReg
      font = Noto Sans
      forceEndRoutine = False
      granularity = 0
      labels = 1, 2, 3, 4, 5, 6, 7, 8, 9
      letterHeight = 0.05
      pos [set every repeat] = (0, slider_y)
      size [set every repeat] = (slider_width, slider_height)
      startVal [condition] = $rating_type == 'SAM'
      stopVal [condition] = $rating_type != 'SAM'
      styles = radio
      ticks = (1, 2, 3, 4, 5,6, 7, 8, 9)
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    ImageComponent imageSAMPainReg
      image [set every repeat] = $picture_path
      pos [set every repeat] = (0, sam_y)
      size [set every repeat] = (sam_width, sam_height)
      startVal [time (s)] = 0.0
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    TextComponent textStateMeasurePainReg
      letterHeight = 0.05
      pos [set every repeat] = (0, 0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_message
      wrapWidth = 1.5
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    TextComponent textStateMeasureLabelMin
      letterHeight = 0.05
      pos [set every repeat] = (tick_positions[0], label_y)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_min_label
      wrapWidth = 0.5
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    TextComponent textStateMeasureLabelMax
      letterHeight = 0.05
      pos [set every repeat] = (tick_positions[-1], label_y)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_max_label
      wrapWidth = 0.5
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    TextboxComponent tb_continue_painreg
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.5, 0.25)
      startVal [condition] = $allowContinue == True
      text = Press the SPACEBAR to continue
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    KeyboardComponent key_resp_state_measure_pain_reg
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent codepainreghelper
      Code Type = Py
      Begin Experiment:
        # Scale SAM properly
        # Window and coordinate setup
        screen_width, screen_height = win.size
        aspect = screen_width / screen_height  # width / height

        # In 'height' units:
        # - Full screen height = 1.0
        # - Full screen width  = aspect
        leftEdge = -aspect / 2
        rightEdge = aspect / 2
        topEdge = 0.5
        bottomEdge = -0.5


        # --- Generic Slider Scaling ---
        # Full-width slider across screen
        slider_gen_width = aspect * 0.7   # 70% of screen width

        # --- SAM image geometry (pixels) ---
        sam_px_width = 1168
        sam_px_height = 231
        sam_aspect = sam_px_width / sam_px_height  # ≈ 5.065

        # Pictogram/gap geometry (pixels)
        pictogram_px_width = 215
        gap_px_width = 23
        num_pictograms = 5
        num_gaps = num_pictograms - 1

        # Sanity check total width in px (info only)
        total_calc_px = num_pictograms * pictogram_px_width + num_gaps * gap_px_width
        # Note: total_calc_px ≈ 1175; close enough to 1170 given source image padding.

        # --- Layout decisions (height units) ---
        sam_height = 0.25                         # 25% of screen height
        sam_width  = sam_height * sam_aspect      # scaled width based on aspect
        sam_y      = 0.1                          # vertical position of the image

        # Slider layout (height units)
        slider_y      = -0.09                     # vertical position of the slider center
        slider_height = 0.06                      # slider thickness/height
        slider_px_width = sam_px_width - 215
        slider_width = sam_width * (slider_px_width / sam_px_width) # match slider width to image width

        # Label MinMax layout
        label_y = slider_y - 0.2 # slightly below the slider

        # Scale factor: px -> 'height' units within the image width
        scale_factor = sam_width / sam_px_width

        pictogram_w = pictogram_px_width * scale_factor
        gap_w       = gap_px_width * scale_factor

        # --- Compute 9 tick x-positions aligned to pictograms (1,3,5,7,9) and gaps (2,4,6,8) ---
        tick_positions = []
        # Start at the center of the first pictogram: left edge + half pictogram width
        x = -sam_width / 2 + pictogram_w / 2

        for i in range(9):
            tick_positions.append(x)
            # Advance: pictogram -> gap -> pictogram -> gap ...
            if i % 2 == 0:  # 0,2,4,6,8 (odd-numbered ticks under pictograms)
                x += pictogram_w / 2 + gap_w / 2
            else:           # 1,3,5,7 (even-numbered ticks under gaps)
                x += gap_w / 2 + pictogram_w / 2

        # Helpful mapping: tick index (0..8) -> value (1..9)
        tick_values = list(range(1, 10))
      Begin Routine:
        allowContinue = False
      Each Frame:
        # Check if either slider has been rated
        rated = (sliderGenericPainReg.getRating() is not None) or (sliderSAMPainReg.getRating() is not None)

        # If rated, allow spacebar to end the routine
        if rated:
            allowContinue = True
        else:
            allowContinue = False
  Routine routine_5sec_block_pause
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    TextComponent pause
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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Flow
  Routine welcome
  LoopInitiator state_measure_loop1 loopType="TrialHandler"
    Selected rows = 1:8
    conditionsFile = loopStateMeasurePainReg.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'rating_type': 'Generic', 'rating_category': 'Fatigue', 'rating_min_label': 'No fatigue at all', 'rating_max_label': 'As bad as you can imagine', 'picture_path': None, 'rating_message': 'Rate your current fatigue level'},
      {'rating_type': 'Generic', 'rating_category': 'Sleepiness', 'rating_min_label': 'Not at all sleepy', 'rating_max_label': 'As bad as you can imagine', 'picture_path': None, 'rating_message': 'Rate your current sleepiness level'},
      {'rating_type': 'Generic', 'rating_category': 'Pain', 'rating_min_label': 'No pain', 'rating_max_label': 'Worst possible pain', 'picture_path': None, 'rating_message': 'Rate your current pain level'},
      {'rating_type': 'Generic', 'rating_category': 'Pain Unpleasantness', 'rating_min_label': 'Not at all unpleasant pain', 'rating_max_label': 'Worst possible unpleasant pain', 'picture_path': None, 'rating_message': 'Rate your current pain unpleasantness level'},
      {'rating_type': 'Generic', 'rating_category': 'Pain Management', 'rating_min_label': 'Not at all confident', 'rating_max_label': 'Extremely Confident', 'picture_path': None, 'rating_message': 'How confident are you to manage your pain?'},
      {'rating_type': 'SAM', 'rating_category': 'Valence', 'rating_min_label': 'Pleasant', 'rating_max_label': 'Unpleasant', 'picture_path': '../../shared/pictures/sam-valence.png', 'rating_message': 'Rate how pleasant or unpleasant you feel'}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
    Routine state_measure1
  LoopTerminator state_measure_loop1
  Routine Instruc01
  Routine Instruct02
  Routine cross
  LoopInitiator training_loop loopType="TrialHandler"
    conditionsFile = loopPainRegulationTrainingInstr.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'regulation_type': 'baseline', 'instr_message': 'No Change:\nImagine the skin of your painful body part, without any pain modulation.'},
      {'regulation_type': 'inhibit', 'instr_message': 'Inhibit:\nImagine a wound on your painful body part that gradually becomes smaller, and the pain becomes weaker.'},
      {'regulation_type': 'facilitate', 'instr_message': 'Facilitate:\nImagine a wound on a painful body part that becomes larger, and the pain becomes stronger.'}]
    Routine training_instructions
    Routine train_stimulus
    Routine train_resp
  LoopTerminator training_loop
  Routine end_train
  LoopInitiator pain_reg_main_loop loopType="TrialHandler"
    conditionsFile = loopPainRegulationMain.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'pain_block_condition': 'baseline', 'pain_instr_message': 'No Change:\nImagine the skin of your painful body part, without any pain modulation.'},
      {'pain_block_condition': 'baseline', 'pain_instr_message': 'No Change:\nImagine the skin of your painful body part, without any pain modulation.'},
      {'pain_block_condition': 'facilitate', 'pain_instr_message': 'Facilitate:\nImagine a wound on a painful body part that becomes larger, and the pain becomes stronger.'},
      {'pain_block_condition': 'facilitate', 'pain_instr_message': 'Facilitate:\nImagine a wound on a painful body part that becomes larger, and the pain becomes stronger.'},
      {'pain_block_condition': 'inhibit', 'pain_instr_message': 'Inhibit:\nImagine a wound on your painful body part that gradually becomes smaller, and the pain becomes weaker.'},
      {'pain_block_condition': 'inhibit', 'pain_instr_message': 'Inhibit:\nImagine a wound on your painful body part that gradually becomes smaller, and the pain becomes weaker.'},
      {'pain_block_condition': 'baseline', 'pain_instr_message': 'No Change:\nImagine the skin of your painful body part, without any pain modulation.'},
      {'pain_block_condition': 'baseline', 'pain_instr_message': 'No Change:\nImagine the skin of your painful body part, without any pain modulation.'},
      {'pain_block_condition': 'inhibit', 'pain_instr_message': 'Inhibit:\nImagine a wound on your painful body part that gradually becomes smaller, and the pain becomes weaker.'}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
    Routine pain_reg_instr01
    LoopInitiator inner_trial_loop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 12
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      Routine pain_reg_stimulus
      Routine pain_reg_resp
    LoopTerminator inner_trial_loop
    LoopInitiator pain_reg_state_measure_loop loopType="TrialHandler"
      conditionsFile = loopPainRegStateMeasureMain.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'rating_type': 'Generic', 'rating_category': 'Pain', 'rating_min_label': 'No pain', 'rating_max_label': 'Worst possible pain', 'picture_path': None, 'rating_message': 'Rate your current pain level'},
        {'rating_type': 'Generic', 'rating_category': 'Pain Unpleasantness', 'rating_min_label': 'Not at all unpleasant pain', 'rating_max_label': 'Worst possible unpleasant pain', 'picture_path': None, 'rating_message': 'Rate your current pain unpleasantness level'},
        {'rating_type': 'Generic', 'rating_category': 'Pain Management', 'rating_min_label': 'Not at all confident', 'rating_max_label': 'Extremely Confident', 'picture_path': None, 'rating_message': 'How efficient were you in influencing your sensations?'},
        {'rating_type': 'SAM', 'rating_category': 'Valence', 'rating_min_label': 'Pleasant', 'rating_max_label': 'Unpleasant', 'picture_path': '../../shared/pictures/sam-valence.png', 'rating_message': 'Rate how pleasant or unpleasant you feel'},
        {'rating_type': 'SAM', 'rating_category': 'Arousal', 'rating_min_label': 'Calm', 'rating_max_label': 'Excited', 'picture_path': '../../shared/pictures/sam-arousal.png', 'rating_message': 'Rate how calm or excited you feel'},
        {'rating_type': 'SAM', 'rating_category': 'Dominance', 'rating_min_label': 'Dominated', 'rating_max_label': 'In Control', 'picture_path': '../../shared/pictures/sam-dominance.png', 'rating_message': 'Rate how dominated or in control you feel'}]
      Routine pain_reg_state_measure
    LoopTerminator pain_reg_state_measure_loop
    Routine routine_5sec_block_pause
  LoopTerminator pain_reg_main_loop
  LoopInitiator state_measure_loop2 loopType="TrialHandler"
    conditionsFile = ../../shared/loop-templates/loopStateMeasureOutro.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'rating_type': 'Generic', 'rating_category': 'Fatigue', 'rating_min_label': 'No fatigue at all', 'rating_max_label': 'As bad as you can imagine', 'picture_path': None, 'rating_message': 'Rate your current fatigue level'},
      {'rating_type': 'Generic', 'rating_category': 'Sleepiness', 'rating_min_label': 'Not at all sleepy', 'rating_max_label': 'As bad as you can imagine', 'picture_path': None, 'rating_message': 'Rate your current sleepiness level'},
      {'rating_type': 'Generic', 'rating_category': 'Pain', 'rating_min_label': 'No pain', 'rating_max_label': 'Worst possible pain', 'picture_path': None, 'rating_message': 'Rate your current pain level'},
      {'rating_type': 'Generic', 'rating_category': 'Pain Unpleasantness', 'rating_min_label': 'Not at all unpleasant pain', 'rating_max_label': 'Worst possible unpleasant pain', 'picture_path': None, 'rating_message': 'Rate your current pain unpleasantness level'},
      {'rating_type': 'SAM', 'rating_category': 'Valence', 'rating_min_label': 'Pleasant', 'rating_max_label': 'Unpleasant', 'picture_path': '../../shared/pictures/sam-valence.png', 'rating_message': 'Rate how pleasant or unpleasant you feel'},
      {'rating_type': 'SAM', 'rating_category': 'Arousal', 'rating_min_label': 'Calm', 'rating_max_label': 'Excited', 'picture_path': '../../shared/pictures/sam-arousal.png', 'rating_message': 'Rate how calm or excited you feel'}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
    Routine state_measure_end
  LoopTerminator state_measure_loop2
  Routine end
