PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [2560, 1440]
  color = $(-0.5000, -0.5000, -0.5000)
  expName = open-closed
  expVersion = 1.0
  keyboardBackend = ioHub
  logging level = debug
  runMode = 1
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Routines
  Routine welcome
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    KeyboardComponent key_resp_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent t_body
      letterHeight = 0.07
      pos = (0.0, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Message
      units = height
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    TextComponent t_continue
      letterHeight = 0.04
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press the SPACEBAR to continue
      units = height
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  Routine instruction
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent t_instruction
      letterHeight = 0.07
      pos = (0.0, 0.05)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $Prompt
    TextComponent t_continue_2
      letterHeight = 0.04
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press the SPACEBAR to begin
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  Routine fixation
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    PolygonComponent cross_fixation
      fillColor = white
      shape = cross
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      units = height
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  Routine goodbye
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    TextComponent t_goodbye
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = You have completed the trial. Thank you!
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  Routine triggerStart
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    ParallelOutComponent p_port_start
      address = 0x0378
      register = EIO
      startData = 1
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 1.0
      syncScreen = True
      syncScreenRefresh = True
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  Routine triggerStop
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    ParallelOutComponent p_port_stop
      address = 0x0378
      register = EIO
      startData = 2
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 1.0
      syncScreen = True
      syncScreenRefresh = True
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  Routine stateMeasure
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    SliderComponent slider_generic
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
      letterHeight = 0.05
      size [set every repeat] = (slider_gen_width, 0.1)
      startVal [condition] = $rating_type == 'Generic'
      stopVal [condition] = $rating_type != 'Generic'
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    SliderComponent slider_SAM
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = 1, 2, 3, 4, 5, 6, 7, 8, 9
      letterHeight = 0.05
      pos [set every repeat] = (0, slider_y)
      size [set every repeat] = (slider_width, slider_height)
      startVal [condition] = $rating_type == 'SAM'
      stopVal [condition] = $rating_type != 'SAM'
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    ImageComponent image_SAM
      image [set every repeat] = $picture_path
      pos [set every repeat] = (0, sam_y)
      size [set every repeat] = (sam_width, sam_height)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent t_sm_message
      letterHeight = 0.07
      pos = (0, .35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_message
      wrapWidth = 1.5
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    TextComponent t_label_min
      letterHeight = 0.05
      pos [set every repeat] = (tick_positions[0], label_y)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_min_label
      wrapWidth = 0.25
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    TextComponent t_label_max
      letterHeight = 0.05
      pos [set every repeat] = (tick_positions[-1], label_y)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_max_label
      wrapWidth = 0.25
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    TextComponent t_continue_sm
      letterHeight = 0.04
      pos = (0, -0.35)
      startVal [condition] = $allowContinue == True
      text = Press the SPACEBAR to continue
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    CodeComponent code_sm_helper
      Code Type = Py
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      Begin Experiment:
        # Scale SAM properly
        # Window and coordinate setup
        screen_width, screen_height = win.size
        aspect = screen_width / screen_height  # width / height

        # In 'height' units:
        # - Full screen height = 1.0
        # - Full screen width  = aspect
        leftEdge = -aspect / 2
        rightEdge = aspect / 2
        topEdge = 0.5
        bottomEdge = -0.5


        # --- Generic Slider Scaling ---
        # Full-width slider across screen
        slider_gen_width = aspect * 0.6   # 60% of screen width

        # --- SAM image geometry (pixels) ---
        sam_px_width = 1168
        sam_px_height = 231
        sam_aspect = sam_px_width / sam_px_height  # ≈ 5.065

        # Pictogram/gap geometry (pixels)
        pictogram_px_width = 215
        gap_px_width = 23
        num_pictograms = 5
        num_gaps = num_pictograms - 1

        # Sanity check total width in px (info only)
        total_calc_px = num_pictograms * pictogram_px_width + num_gaps * gap_px_width
        # Note: total_calc_px ≈ 1175; close enough to 1170 given source image padding.

        # --- Layout decisions (height units) ---
        sam_height = 0.25                         # 25% of screen height
        sam_width  = sam_height * sam_aspect      # scaled width based on aspect
        sam_y      = 0.1                          # vertical position of the image

        # Slider layout (height units)
        slider_y      = -0.09                     # vertical position of the slider center
        slider_height = 0.06                      # slider thickness/height
        slider_px_width = sam_px_width - 215
        slider_width = sam_width * (slider_px_width / sam_px_width) # match slider width to image width

        # Label MinMax layout
        label_y = slider_y - 0.2 # slightly below the slider

        # Message Layout
        message_y = sam_y + 0.2

        # Scale factor: px -> 'height' units within the image width
        scale_factor = sam_width / sam_px_width

        pictogram_w = pictogram_px_width * scale_factor
        gap_w       = gap_px_width * scale_factor

        # --- Compute 9 tick x-positions aligned to pictograms (1,3,5,7,9) and gaps (2,4,6,8) ---
        tick_positions = []
        # Start at the center of the first pictogram: left edge + half pictogram width
        x = -sam_width / 2 + pictogram_w / 2

        for i in range(9):
            tick_positions.append(x)
            # Advance: pictogram -> gap -> pictogram -> gap ...
            if i % 2 == 0:  # 0,2,4,6,8 (odd-numbered ticks under pictograms)
                x += pictogram_w / 2 + gap_w / 2
            else:           # 1,3,5,7 (even-numbered ticks under gaps)
                x += gap_w / 2 + pictogram_w / 2

        # Helpful mapping: tick index (0..8) -> value (1..9)
        tick_values = list(range(1, 10))
      Begin Routine:
        allowContinue = False
      Each Frame:
        # Check if either slider has been rated
        rated = (slider_generic.getRating() is not None) or (slider_SAM.getRating() is not None)

        # If rated, allow spacebar to end the routine
        if rated:
            allowContinue = True
        else:
            allowContinue = False
    KeyboardComponent key_resp_sm
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [condition] = $allowContinue == True
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Flow
  LoopInitiator intro_prompts loopType="TrialHandler"
    conditionsFile = ../../shared/loop-templates/loopOpenClosedIntro.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Message': 'Welcome to the Open-Closed Eyes Experiment!\n\nThis is designed for the Wireless EEG and EMG devices. '},
      {'Message': 'Please relax and remain still during the experiment while we record your baseline brain activity.'},
      {'Message': 'Follow the on-screen instructions to open or close your eyes as prompted.\n\nWe will do this twice, with each round lasting 5 minutes.'},
      {'Message': 'During the eyes-open section,\nlook steadily at the cross mark in the center of the screen.'},
      {'Message': "For the eyes-closed section,\nyou'll close your eyes for the given duration.\n\nPlease avoid falling asleep!"},
      {'Message': 'The trial will begin on the following screen.\n\nPlease let us know if you have any remaining questions.'}]
    Routine welcome
  LoopTerminator intro_prompts
  LoopInitiator state_measure_pretrial loopType="TrialHandler"
    conditionsFile = ../../shared/loop-templates/loopStateMeasure.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'rating_type': 'Generic', 'rating_category': 'Fatigue', 'rating_min_label': 'No fatigue at all', 'rating_max_label': 'As bad as you can imagine', 'picture_path': None, 'rating_message': 'Rate your current fatigue level'},
      {'rating_type': 'Generic', 'rating_category': 'Sleepiness', 'rating_min_label': 'Not at all sleepy', 'rating_max_label': 'As bad as you can imagine', 'picture_path': None, 'rating_message': 'Rate your current sleepiness level'},
      {'rating_type': 'Generic', 'rating_category': 'Pain', 'rating_min_label': 'No pain', 'rating_max_label': 'Worst possible pain', 'picture_path': None, 'rating_message': 'Rate your current pain level'},
      {'rating_type': 'Generic', 'rating_category': 'Pain Unpleasantness', 'rating_min_label': 'Not at all unpleasant pain', 'rating_max_label': 'Worst possible unpleasant pain', 'picture_path': None, 'rating_message': 'Rate your current pain unpleasantness level'},
      {'rating_type': 'SAM', 'rating_category': 'Valence', 'rating_min_label': 'Pleasant', 'rating_max_label': 'Unpleasant', 'picture_path': '../../shared/pictures/sam-valence.png', 'rating_message': 'Rate how pleasant or unpleasant you feel'},
      {'rating_type': 'SAM', 'rating_category': 'Arousal', 'rating_min_label': 'Calm', 'rating_max_label': 'Excited', 'picture_path': '../../shared/pictures/sam-arousal.png', 'rating_message': 'Rate how calm or excited you feel'}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
    Routine stateMeasure
  LoopTerminator state_measure_pretrial
  LoopInitiator openclosed_trials loopType="TrialHandler"
    conditionsFile = ../../shared/loop-templates/loopOpenClosedTrial.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Category': 'Open-Eyes', 'Prompt': 'Look at the + mark and stay still for 5 minutes.'},
      {'Category': 'Closed-Eyes', 'Prompt': 'Close your eyes and stay still for 5 minutes.'}]
    Routine instruction
    Routine triggerStart
    Routine fixation
    Routine triggerStop
    LoopInitiator state_measure_trials loopType="TrialHandler"
      conditionsFile = ../../shared/loop-templates/loopStateMeasure.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'rating_type': 'Generic', 'rating_category': 'Fatigue', 'rating_min_label': 'No fatigue at all', 'rating_max_label': 'As bad as you can imagine', 'picture_path': None, 'rating_message': 'Rate your current fatigue level'},
        {'rating_type': 'Generic', 'rating_category': 'Sleepiness', 'rating_min_label': 'Not at all sleepy', 'rating_max_label': 'As bad as you can imagine', 'picture_path': None, 'rating_message': 'Rate your current sleepiness level'},
        {'rating_type': 'Generic', 'rating_category': 'Pain', 'rating_min_label': 'No pain', 'rating_max_label': 'Worst possible pain', 'picture_path': None, 'rating_message': 'Rate your current pain level'},
        {'rating_type': 'Generic', 'rating_category': 'Pain Unpleasantness', 'rating_min_label': 'Not at all unpleasant pain', 'rating_max_label': 'Worst possible unpleasant pain', 'picture_path': None, 'rating_message': 'Rate your current pain unpleasantness level'},
        {'rating_type': 'SAM', 'rating_category': 'Valence', 'rating_min_label': 'Pleasant', 'rating_max_label': 'Unpleasant', 'picture_path': '../../shared/pictures/sam-valence.png', 'rating_message': 'Rate how pleasant or unpleasant you feel'},
        {'rating_type': 'SAM', 'rating_category': 'Arousal', 'rating_min_label': 'Calm', 'rating_max_label': 'Excited', 'picture_path': '../../shared/pictures/sam-arousal.png', 'rating_message': 'Rate how calm or excited you feel'}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
      Routine stateMeasure
    LoopTerminator state_measure_trials
  LoopTerminator openclosed_trials
  Routine goodbye
